WorkflowBuilder(Version=2.1.1)
Source(Generator=Bonsai.FlyPad.FlyPadSource(LocationId=529)) => #0
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName="New folder\CapacitanceTimeStamp.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source.Timestamp)
#0 -> Bonsai.Dsp.MatrixWriter(Path="New folder\CapacitanceData_C01_01_22_C02_23_42_C03_43_64_", Suffix=Timestamp, Overwrite=false, Layout=RowMajor)
#0 -> NestedWorkflow 1
    WorkflowInput Source1 => #13
    Source(Generator=IntProperty(Value=0)) => #26
    NestedWorkflow Timer => #27
        ExternalizedTimeSpanOfDelay Interval(MemberName=Interval, Value=PT5M)
        -> NestedWorkflow FlipFlop(PropertyMappings(PropertyMapping(name=Interval, selector=Source1))) => #3
            Source(Generator=IntProperty(Value=1)) => #6
            Source(Generator=IntProperty(Value=0)) => #7
            ExternalizedTimeSpanOfDelay Interval(MemberName=DueTime, Value=PT5M)
            -> Replay => #11
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan(it.Ticks*2)
            -> ExternalizedTimeSpanOfTimer(MemberName=Period, Value=PT1S)
            -> Source(PropertyMappings(PropertyMapping(name=Period, selector=Source1)), Generator=Timer(DueTime=PT0S, Period=PT10M)) => #8
            #6, #8 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1) => #2
            #7, #8 -> CombineLatest => #5
            #5, #11 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT5M)
            -> MemberSelector(Selector=Source.Item1) => #1
            #1, #2 -> Merge
            -> WorkflowOutput
        ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT0.01S)
        -> Source(PropertyMappings(PropertyMapping(name=Period, selector=Source1)), Generator=Timer(DueTime=PT0S, Period=PT0.01S)) => #2
        #2, #3 -> CombineLatest
        -> MemberSelector(Selector=Source.Item2)
        -> WorkflowOutput
    #26, #27 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform => #3
      Script:
        import clr

        def getOutputType():
          return clr.GetClrType(list)

        def process(input):
          if (input.Item2==1):
            with open(r'config/experiment1.dat') as f:
              f=[x.strip() for x in f if x.strip()]
              data=[tuple(map(float,x.split())) for x in f[0:]]
              length = len(data)
            return data
          else:
            with open(r'config/experiment2.dat') as f:
              f=[x.strip() for x in f if x.strip()]
              data=[tuple(map(float,x.split())) for x in f[0:]]
              length = len(data)
            return data
    #13, #3 -> NestedWorkflow 4_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=7))
        -> NestedWorkflow => #2
            WorkflowInput Source1
            -> Bonsai.Dsp.ElementCountBuffer(Count=4, Skip=nil)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Abs
            -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1")
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Source.Val0)
            -> GreaterThan(Operand=DoubleProperty(Value=140))
            -> WorkflowOutput
        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[3][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input

                if (colour == 1):
            	return 16
                elif (colour == 2):
            	return 14
                elif (colour == 3):
                   return 15
                elif (colour == 4):
                   return 17
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 4_2"(MemberName=Pin, Value=14) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 4_2"(MemberName="DueTime Delay 4_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 4_2"(MemberName="DueTime Sustain 4_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 4_2(PropertyMappings(PropertyMapping(name="DueTime Delay 4_2", selector=Source2), PropertyMapping(name="DueTime Sustain 4_2", selector=Source3))) => #1
            WorkflowInput Source1
            -> DistinctUntilChanged
            -> Index
            -> Bonsai.Scripting.PythonCondition
              Script:
                def process(input):
                  return input.Index > 0 or input.Value
            -> MemberSelector(Selector=Source.Value) => #17
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #8
            #17 -> Condition => #11
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Delay 4_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
            -> Take(Count=1) => #16
            #16, #8 -> Amb => #7
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #7 -> Condition => #6
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Sustain 4_2"(MemberName=DueTime, Value=PT2S) => #21
            #6, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT2S)
            -> Take(Count=1)
            -> BitwiseNot => #13
            #13, #14, #6 -> Merge
            -> Repeat
            -> WorkflowOutput
        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=16) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_04_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 5_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=8))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[4][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input

                if (colour == 1):
            	return 20
                elif (colour == 2):
            	return 18
                elif (colour == 3):
                   return 19
                elif (colour == 4):
                   return 21
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 5_1"(MemberName=Pin, Value=20) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[4][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 5_1"(MemberName="DueTime Delay 5_1", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[4][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 5_1"(MemberName="DueTime Sustain 5_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 5_1(PropertyMappings(PropertyMapping(name="DueTime Delay 5_1", selector=Source2), PropertyMapping(name="DueTime Sustain 5_1", selector=Source3))) => #1
            WorkflowInput Source1
            -> DistinctUntilChanged
            -> Index
            -> Bonsai.Scripting.PythonCondition
              Script:
                def process(input):
                  return input.Index > 0 or input.Value
            -> MemberSelector(Selector=Source.Value) => #17
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #8
            #17 -> Condition => #11
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Delay 5_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
            -> Take(Count=1) => #16
            #16, #8 -> Amb => #7
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #7 -> Condition => #6
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Sustain 5_1"(MemberName=DueTime, Value=PT2S) => #21
            #6, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT2S)
            -> Take(Count=1)
            -> BitwiseNot => #13
            #13, #14, #6 -> Merge
            -> Repeat
            -> WorkflowOutput
        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=20) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_05_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 5_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=9))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[4][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 5_2"(MemberName=Pin, Value=18) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[4][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 5_2"(MemberName="DueTime Delay 5_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[4][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 5_2"(MemberName="DueTime Sustain 5_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 5_2(PropertyMappings(PropertyMapping(name="DueTime Delay 5_2", selector=Source2), PropertyMapping(name="DueTime Sustain 5_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 5_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 5_2"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=20) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_05_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 1_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> NestedWorkflow => #8
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        WorkflowInput Source2 => #11
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[0][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 11
                elif (colour == 2):
            	return 13
                elif (colour == 3):
                   return 12
                elif (colour == 4):
                   return 10
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 1_1"(MemberName="DueTime Sustain 1_1", Value=PT2S) => #4
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 1_1"(MemberName="DueTime Delay 1_1", Value=PT1S) => #3
        #8, #4, #3 -> NestedWorkflow 1_1(PropertyMappings(PropertyMapping(name="DueTime Delay 1_1", selector=Source3), PropertyMapping(name="DueTime Sustain 1_1", selector=Source2))) => #7
            WorkflowInput Source1
            -> DistinctUntilChanged
            -> Index
            -> Bonsai.Scripting.PythonCondition
              Script:
                def process(input):
                  return input.Index > 0 or input.Value
            -> MemberSelector(Selector=Source.Value) => #19
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #8
            #19 -> Condition => #11
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Sustain 1_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 1_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
            -> Take(Count=1) => #16
            #16, #8 -> Amb => #7
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #7 -> Condition => #6
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            #6, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT2S)
            -> Take(Count=1)
            -> BitwiseNot => #13
            #13, #14, #6 -> Merge
            -> Repeat
            -> WorkflowOutput
        #7, #0 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=11) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_01_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 1_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=1))
        -> NestedWorkflow => #8
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[0][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_2"(MemberName=Pin, Value=13) => #10
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 1_2"(MemberName="DueTime Delay 1_2", Value=PT1S) => #1
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 1_2"(MemberName="DueTime Sustain 1_2", Value=PT2S) => #2
        #8, #2, #1 -> NestedWorkflow 1_2(PropertyMappings(PropertyMapping(name="DueTime Delay 1_2", selector=Source3), PropertyMapping(name="DueTime Sustain 1_2", selector=Source2))) => #7
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            ExternalizedTimeSpanOfDelay "DueTime Delay 1_2"(MemberName=DueTime, Value=PT10S) => #20
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 1_2"(MemberName=DueTime, Value=PT2S) => #21
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=11) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_01_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 6_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=10))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[5][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 24
                elif (colour == 2):
            	return 22
                elif (colour == 3):
                   return 23
                elif (colour == 4):
                   return 25
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 6_1"(MemberName=Pin, Value=24) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[5][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 6_1"(MemberName="DueTime Delay 6_1", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[5][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 6_1"(MemberName="DueTime Sustain 6_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 6_1(PropertyMappings(PropertyMapping(name="DueTime Delay 6_1", selector=Source2), PropertyMapping(name="DueTime Sustain 6_1", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 6_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 6_1"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=24) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_06_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 6_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=11))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[5][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 6_2"(MemberName=Pin, Value=22) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[5][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 6_2"(MemberName="DueTime Delay 6_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[5][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 6_2"(MemberName="DueTime Sustain 6_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 6_2(PropertyMappings(PropertyMapping(name="DueTime Delay 6_2", selector=Source2), PropertyMapping(name="DueTime Sustain 6_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 6_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 6_2"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=24) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_06_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 2_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> NestedWorkflow => #8
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[1][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 7
                elif (colour == 2):
            	return 9
                elif (colour == 3):
                   return 8
                elif (colour == 4):
                   return 6
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 2_1"(MemberName=Pin, Value=7) => #10
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 2_1"(MemberName="DueTime Delay 2_1", Value=PT1S) => #1
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 2_1"(MemberName="DueTime Sustain 2_1", Value=PT2S) => #2
        #8, #1, #2 -> NestedWorkflow 2_1(PropertyMappings(PropertyMapping(name="DueTime Sustain 2_1", selector=Source3))) => #7
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            ExternalizedTimeSpanOfDelay "DueTime Delay 2_1"(MemberName=DueTime, Value=PT1S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT1S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 2_1"(MemberName=DueTime, Value=PT2S) => #21
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=7) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_02_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 2_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=3))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[1][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 2_2"(MemberName=Pin, Value=9) => #10
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 2_2"(MemberName="DueTime Delay 2_2", Value=PT1S) => #5
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 2_2"(MemberName="DueTime Sustain 2_2", Value=PT2S) => #6
        #2, #5, #6 -> NestedWorkflow 2_2(PropertyMappings(PropertyMapping(name="DueTime Delay 2_2", selector=Source2), PropertyMapping(name="DueTime Sustain 2_2", selector=Source3))) => #1
            WorkflowInput Source1
            -> DistinctUntilChanged
            -> Index
            -> Bonsai.Scripting.PythonCondition
              Script:
                def process(input):
                  return input.Index > 0 or input.Value
            -> MemberSelector(Selector=Source.Value) => #17
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #8
            #17 -> Condition => #11
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            ExternalizedTimeSpanOfDelay "DueTime Sustain 2_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 2_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
            -> Take(Count=1) => #16
            #16, #8 -> Amb => #7
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #7 -> Condition => #6
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            #6, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT2S)
            -> Take(Count=1)
            -> BitwiseNot => #13
            #13, #14, #6 -> Merge
            -> Repeat
            -> WorkflowOutput
        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=7) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_02_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 3_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=4))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[2][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 3
                elif (colour == 2):
            	return 5
                elif (colour == 3):
                   return 4
                elif (colour == 4):
                   return 2
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 3_1"(MemberName=Pin, Value=3) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 3_1"(MemberName="DueTime Delay 3_1", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 3_1"(MemberName="DueTime Sustain 3_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 3_1(PropertyMappings(PropertyMapping(name="DueTime Delay 3_1", selector=Source2), PropertyMapping(name="DueTime Sustain 3_1", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 3_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 3_1"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=3) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_03_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 3_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=5))
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              return input[2][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 3_2"(MemberName=Pin, Value=5) => #4
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              return TimeSpan.FromSeconds(input[2][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 3_2"(MemberName="DueTime Delay 3_2", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[2][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 3_2"(MemberName="DueTime Sustain 3_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 3_2(PropertyMappings(PropertyMapping(name="DueTime Delay 3_2", selector=Source2), PropertyMapping(name="DueTime Sustain 3_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 3_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 3_2"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=3) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_03_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 4_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=6))
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              return input[3][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 4_1"(MemberName=Pin, Value=16) => #4
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              return TimeSpan.FromSeconds(input[3][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 4_1"(MemberName="DueTime Delay 4_1", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[3][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 4_1"(MemberName="DueTime Sustain 4_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 4_1(PropertyMappings(PropertyMapping(name="DueTime Delay 4_1", selector=Source2), PropertyMapping(name="DueTime Sustain 4_1", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 4_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 4_1"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=16) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_04_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 7_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=12))
        -> NestedWorkflow => #9
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[6][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 28
                elif (colour == 2):
            	return 26
                elif (colour == 3):
                   return 27
                elif (colour == 4):
                   return 29
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 7_1"(MemberName=Pin, Value=11) => #0
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[6][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 7_1"(MemberName="DueTime Delay 7_1", Value=PT1S) => #5
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[6][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 7_1"(MemberName="DueTime Sustain 7_1", Value=PT2S) => #3
        #9, #5, #3 -> NestedWorkflow 7_1(PropertyMappings(PropertyMapping(name="DueTime Delay 7_1", selector=Source2), PropertyMapping(name="DueTime Sustain 7_1", selector=Source3))) => #8
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 7_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 7_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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        #8, #0 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=28) => #7
        -> WorkflowOutput
        #7 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_07_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 7_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=13))
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              return input[6][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 7_2"(MemberName=Pin, Value=13) => #10
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              return TimeSpan.FromSeconds(input[6][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 7_2"(MemberName="DueTime Delay 7_2", Value=PT1S) => #2
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              return TimeSpan.FromSeconds(input[6][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 7_2"(MemberName="DueTime Sustain 7_2", Value=PT2S) => #1
        #8, #2, #1 -> NestedWorkflow 7_2(PropertyMappings(PropertyMapping(name="DueTime Delay 7_2", selector=Source2), PropertyMapping(name="DueTime Sustain 7_2", selector=Source3))) => #7
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            ExternalizedTimeSpanOfDelay "DueTime Delay 7_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 7_2"(MemberName=DueTime, Value=PT2S) => #21
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=28) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_07_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 12_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=22))
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              return input[11][0]
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            	return 48
                elif (colour == 2):
            	return 46
                elif (colour == 3):
                   return 47
                elif (colour == 4):
                   return 49
                else:
                   return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 12_1"(MemberName=Pin, Value=24) => #4
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              return TimeSpan.FromSeconds(input[11][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 12_1"(MemberName="DueTime Delay 12_1", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[11][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 12_1"(MemberName="DueTime Sustain 12_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 12_1(PropertyMappings(PropertyMapping(name="DueTime Delay 12_1", selector=Source2), PropertyMapping(name="DueTime Sustain 12_1", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 12_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 12_1"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=48) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_12_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 12_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=23))
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              return input[11][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 12_2"(MemberName=Pin, Value=22) => #4
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              return TimeSpan.FromSeconds(input[11][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 12_2"(MemberName="DueTime Delay 12_2", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[11][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 12_2"(MemberName="DueTime Sustain 12_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 12_2(PropertyMappings(PropertyMapping(name="DueTime Delay 12_2", selector=Source2), PropertyMapping(name="DueTime Sustain 12_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 12_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 12_2"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=48) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_12_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 8_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=14))
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              return input[7][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 8_1"(MemberName=Pin, Value=7) => #10
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              return TimeSpan.FromSeconds(input[7][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 8_1"(MemberName="DueTime Delay 8_1", Value=PT1S) => #2
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              return TimeSpan.FromSeconds(input[7][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 8_1"(MemberName="DueTime Sustain 8_1", Value=PT2S) => #1
        #8, #2, #1 -> NestedWorkflow 8_1(PropertyMappings(PropertyMapping(name="DueTime Delay 8_1", selector=Source2), PropertyMapping(name="DueTime Sustain 8_1", selector=Source3))) => #7
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            ExternalizedTimeSpanOfDelay "DueTime Delay 8_1"(MemberName=DueTime, Value=PT0.5S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 8_1"(MemberName=DueTime, Value=PT2S) => #21
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=32) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_08_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 8_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=15))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[7][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 8_2"(MemberName=Pin, Value=9) => #10
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[7][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 8_2"(MemberName="DueTime Delay 8_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[7][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 8_2"(MemberName="DueTime Sustain 8_2", Value=PT2S) => #5
        #2, #6, #5 -> NestedWorkflow 8_2(PropertyMappings(PropertyMapping(name="DueTime Delay 8_2", selector=Source2), PropertyMapping(name="DueTime Sustain 8_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 8_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 8_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=32) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_08_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 9_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=16))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[8][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 9_1"(MemberName=Pin, Value=3) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[8][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 9_1"(MemberName="DueTime Delay 9_1", Value=PT1S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[8][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 9_1"(MemberName="DueTime Sustain 9_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 9_1(PropertyMappings(PropertyMapping(name="DueTime Delay 9_1", selector=Source2), PropertyMapping(name="DueTime Sustain 9_1", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 9_1"(MemberName=DueTime, Value=PT0.5S) => #20
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 9_1"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=36) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_09_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 9_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=17))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[8][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 9_2"(MemberName=Pin, Value=5) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[8][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 9_2"(MemberName="DueTime Sustain 9_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[8][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 9_2"(MemberName="DueTime Delay 9_2", Value=PT2S) => #7
        #2, #7, #6 -> NestedWorkflow 9_2(PropertyMappings(PropertyMapping(name="DueTime Delay 9_2", selector=Source2), PropertyMapping(name="DueTime Sustain 9_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Delay 9_2"(MemberName=DueTime, Value=PT10S) => #20
            #11, #20 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 9_2"(MemberName=DueTime, Value=PT2S) => #21
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=36) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_09_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 10_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=18))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[9][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 10_1"(MemberName=Pin, Value=16) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[9][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 10_1"(MemberName="DueTime Delay 10_1", Value=PT1S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[9][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 10_1"(MemberName="DueTime Sustain 10_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 10_1(PropertyMappings(PropertyMapping(name="DueTime Delay 10_1", selector=Source2), PropertyMapping(name="DueTime Sustain 10_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=40) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_10_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 10_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=19))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[9][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 10_2"(MemberName=Pin, Value=14) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[9][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 10_2"(MemberName="DueTime Delay 10_2", Value=PT1S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[9][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 10_2"(MemberName="DueTime Sustain 10_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 10_2(PropertyMappings(PropertyMapping(name="DueTime Delay 10_2", selector=Source2), PropertyMapping(name="DueTime Sustain 10_2", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=40) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_10_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 11_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=20))
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              return input[10][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 11_1"(MemberName=Pin, Value=20) => #4
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              return TimeSpan.FromSeconds(input[10][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 11_1"(MemberName="DueTime Delay 11_1", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[10][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 11_1"(MemberName="DueTime Sustain 11_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 11_1(PropertyMappings(PropertyMapping(name="DueTime Delay 11_1", selector=Source2), PropertyMapping(name="DueTime Sustain 11_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM5, Pin=44) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_11_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #3 -> NestedWorkflow 11_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=21))
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              return input[10][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 11_2"(MemberName=Pin, Value=18) => #4
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              return TimeSpan.FromSeconds(input[10][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 11_2"(MemberName="DueTime Delay 11_2", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[10][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 11_2"(MemberName="DueTime Sustain 11_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 11_2(PropertyMappings(PropertyMapping(name="DueTime Delay 11_2", selector=Source2), PropertyMapping(name="DueTime Sustain 11_2", selector=Source3))) => #1
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        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_11_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #27 -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName="New folder\Timer1.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="Source.Value,Source.Timestamp")
#0 -> NestedWorkflow 2
    WorkflowInput Source1 => #13
    NestedWorkflow Timer => #28
        ExternalizedTimeSpanOfDelay Interval(MemberName=Interval, Value=PT5M)
        -> NestedWorkflow FlipFlop(PropertyMappings(PropertyMapping(name=Interval, selector=Source1))) => #3
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        ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT0.01S)
        -> Source(PropertyMappings(PropertyMapping(name=Period, selector=Source1)), Generator=Timer(DueTime=PT0S, Period=PT0.01S)) => #2
        #2, #3 -> CombineLatest
        -> MemberSelector(Selector=Source.Item2)
        -> WorkflowOutput
    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName="New folder\Timer2.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="Source.Value,Source.Timestamp")
    Source(Generator=IntProperty(Value=0)) => #30
    #30, #28 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform => #27
      Script:
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    #13, #27 -> NestedWorkflow 16_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=31))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[15][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 16_2"(MemberName=Pin, Value=14) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[15][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 16_2"(MemberName="DueTime Delay 16_2", Value=PT1S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[15][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 16_2"(MemberName="DueTime Sustain 16_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 16_2(PropertyMappings(PropertyMapping(name="DueTime Delay 16_2", selector=Source2), PropertyMapping(name="DueTime Sustain 16_2", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=16) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_16_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 17_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=32))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[16][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 17_1"(MemberName=Pin, Value=20) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[16][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 17_1"(MemberName="DueTime Delay 17_1", Value=PT1S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[16][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 17_1"(MemberName="DueTime Sustain 17_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 17_1(PropertyMappings(PropertyMapping(name="DueTime Delay 17_1", selector=Source2), PropertyMapping(name="DueTime Sustain 17_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=20) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_17_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 17_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=33))
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              return input[16][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 17_2"(MemberName=Pin, Value=18) => #4
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              return TimeSpan.FromSeconds(input[16][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 17_2"(MemberName="DueTime Delay 17_2", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[16][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 17_2"(MemberName="DueTime Sustain 17_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 17_2(PropertyMappings(PropertyMapping(name="DueTime Delay 17_2", selector=Source2), PropertyMapping(name="DueTime Sustain 17_2", selector=Source3))) => #1
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        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_17_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 13_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=24))
        -> NestedWorkflow => #9
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[12][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 13_1"(MemberName=Pin, Value=11) => #0
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[12][2])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 13_1"(MemberName="DueTime Delay 13_1", Value=PT1S) => #3
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[12][4])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 13_1"(MemberName="DueTime Sustain 13_1", Value=PT2S) => #5
        #9, #3, #5 -> NestedWorkflow 13_1(PropertyMappings(PropertyMapping(name="DueTime Delay 13_1", selector=Source2), PropertyMapping(name="DueTime Sustain 13_1", selector=Source3))) => #8
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 13_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 13_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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        #8, #0 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=11) => #7
        -> WorkflowOutput
        #7 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_13_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 13_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=25))
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              return input[12][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 13_2"(MemberName=Pin, Value=13) => #10
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              return TimeSpan.FromSeconds(input[12][3])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Delay 13_2"(MemberName="DueTime Delay 13_2", Value=PT1S) => #2
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              return TimeSpan.FromSeconds(input[12][5])
        -> ExternalizedTimeSpanOfNestedWorkflowBuilder "DueTime Sustain 13_2"(MemberName="DueTime Sustain 13_2", Value=PT2S) => #1
        #8, #2, #1 -> NestedWorkflow 13_2(PropertyMappings(PropertyMapping(name="DueTime Delay 13_2", selector=Source2), PropertyMapping(name="DueTime Sustain 13_2", selector=Source3))) => #7
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=11) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_13_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 18_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=34))
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              return input[17][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 18_1"(MemberName=Pin, Value=24) => #4
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              return TimeSpan.FromSeconds(input[17][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 18_1"(MemberName="DueTime Delay 18_1", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[17][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 18_1"(MemberName="DueTime Sustain 18_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 18_1(PropertyMappings(PropertyMapping(name="DueTime Delay 18_1", selector=Source2), PropertyMapping(name="DueTime Sustain 18_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=24) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_18_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 18_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=35))
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              return input[17][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 18_2"(MemberName=Pin, Value=22) => #4
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              return TimeSpan.FromSeconds(input[17][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 18_2"(MemberName="DueTime Delay 18_2", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[17][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 18_2"(MemberName="DueTime Sustain 18_2", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 18_2(PropertyMappings(PropertyMapping(name="DueTime Delay 18_2", selector=Source2), PropertyMapping(name="DueTime Sustain 18_2", selector=Source3))) => #1
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        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_18_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 14_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=26))
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              return input[13][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 14_1"(MemberName=Pin, Value=7) => #10
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              return TimeSpan.FromSeconds(input[13][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 14_1"(MemberName="DueTime Delay 14_1", Value=PT1S) => #2
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              return TimeSpan.FromSeconds(input[13][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 14_1"(MemberName="DueTime Sustain 14_1", Value=PT2S) => #1
        #8, #2, #1 -> NestedWorkflow 14_1(PropertyMappings(PropertyMapping(name="DueTime Delay 14_1", selector=Source2), PropertyMapping(name="DueTime Sustain 14_1", selector=Source3))) => #7
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=7) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_14_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 14_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=27))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[13][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 14_2"(MemberName=Pin, Value=9) => #10
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[13][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 14_2"(MemberName="DueTime Delay 14_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[13][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 14_2"(MemberName="DueTime Sustain 14_2", Value=PT2S) => #5
        #2, #6, #5 -> NestedWorkflow 14_2(PropertyMappings(PropertyMapping(name="DueTime Delay 14_2", selector=Source2), PropertyMapping(name="DueTime Sustain 14_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 14_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 14_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=7) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_14_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 15_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=28))
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              return input[14][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 15_1"(MemberName=Pin, Value=3) => #4
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              return TimeSpan.FromSeconds(input[14][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 15_1"(MemberName="DueTime Delay 15_1", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[14][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 15_1"(MemberName="DueTime Sustain 15_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 15_1(PropertyMappings(PropertyMapping(name="DueTime Delay 15_1", selector=Source2), PropertyMapping(name="DueTime Sustain 15_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=3) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_15_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 15_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=29))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[14][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 15_2"(MemberName=Pin, Value=5) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[14][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 15_2"(MemberName="DueTime Sustain 15_2", Value=PT1S) => #6
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[14][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 15_2"(MemberName="DueTime Delay 15_2", Value=PT2S) => #7
        #2, #7, #6 -> NestedWorkflow 15_2(PropertyMappings(PropertyMapping(name="DueTime Delay 15_2", selector=Source2), PropertyMapping(name="DueTime Sustain 15_2", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=3) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_15_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 16_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=30))
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              return input[15][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 16_1"(MemberName=Pin, Value=16) => #4
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              return TimeSpan.FromSeconds(input[15][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 16_1"(MemberName="DueTime Delay 16_1", Value=PT1S) => #7
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              return TimeSpan.FromSeconds(input[15][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 16_1"(MemberName="DueTime Sustain 16_1", Value=PT2S) => #6
        #2, #7, #6 -> NestedWorkflow 16_1(PropertyMappings(PropertyMapping(name="DueTime Delay 16_1", selector=Source2), PropertyMapping(name="DueTime Sustain 16_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=16) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_16_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 19_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=36))
        -> NestedWorkflow => #9
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[18][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 19_1"(MemberName=Pin, Value=11) => #0
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[18][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 19_1"(MemberName="DueTime Delay 19_1", Value=PT1S) => #3
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[18][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 19_1"(MemberName="DueTime Sustain 19_1", Value=PT2S) => #5
        #9, #3, #5 -> NestedWorkflow 19_1(PropertyMappings(PropertyMapping(name="DueTime Delay 19_1", selector=Source2), PropertyMapping(name="DueTime Sustain 19_1", selector=Source3))) => #8
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 19_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 19_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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        #8, #0 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=28) => #7
        -> WorkflowOutput
        #7 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_19_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 19_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=37))
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              return input[18][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 19_2"(MemberName=Pin, Value=13) => #10
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              return TimeSpan.FromSeconds(input[18][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 19_2"(MemberName="DueTime Delay 19_2", Value=PT1S) => #1
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              return TimeSpan.FromSeconds(input[18][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 19_2"(MemberName="DueTime Sustain 19_2", Value=PT2S) => #2
        #8, #1, #2 -> NestedWorkflow 19_2(PropertyMappings(PropertyMapping(name="DueTime Delay 19_2", selector=Source2), PropertyMapping(name="DueTime Sustain 19_2", selector=Source3))) => #7
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=28) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_19_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 24_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=46))
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              return input[23][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 24_1"(MemberName=Pin, Value=24) => #4
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              return TimeSpan.FromSeconds(input[23][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 24_1"(MemberName="DueTime Delay 24_1", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[23][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 24_1"(MemberName="DueTime Sustain 24_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 24_1(PropertyMappings(PropertyMapping(name="DueTime Delay 24_1", selector=Source2), PropertyMapping(name="DueTime Sustain 24_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=48) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_24_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 24_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=47))
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              return input[23][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 24_2"(MemberName=Pin, Value=22) => #4
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              return TimeSpan.FromSeconds(input[23][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 24_2"(MemberName="DueTime Delay 24_2", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[23][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 24_2"(MemberName="DueTime Sustain 24_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 24_2(PropertyMappings(PropertyMapping(name="DueTime Delay 24_2", selector=Source2), PropertyMapping(name="DueTime Sustain 24_2", selector=Source3))) => #1
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        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_24_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 20_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=38))
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              return input[19][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 20_1"(MemberName=Pin, Value=7) => #10
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              return TimeSpan.FromSeconds(input[19][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 20_1"(MemberName="DueTime Delay 20_1", Value=PT1S) => #1
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              return TimeSpan.FromSeconds(input[19][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 20_1"(MemberName="DueTime Sustain 20_1", Value=PT2S) => #2
        #8, #1, #2 -> NestedWorkflow 20_1(PropertyMappings(PropertyMapping(name="DueTime Delay 20_1", selector=Source2), PropertyMapping(name="DueTime Sustain 20_1", selector=Source3))) => #7
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        #7, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=32) => #6
        -> WorkflowOutput
        #6 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_20_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 20_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=39))
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              return input[19][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 20_2"(MemberName=Pin, Value=9) => #10
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              return TimeSpan.FromSeconds(input[19][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 20_2"(MemberName="DueTime Delay 20_2", Value=PT1S) => #5
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              return TimeSpan.FromSeconds(input[19][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 20_2"(MemberName="DueTime Sustain 20_2", Value=PT2S) => #6
        #2, #5, #6 -> NestedWorkflow 20_2(PropertyMappings(PropertyMapping(name="DueTime Delay 20_2", selector=Source2), PropertyMapping(name="DueTime Sustain 20_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 20_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 20_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=32) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_20_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 21_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=40))
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              return input[20][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 21_1"(MemberName=Pin, Value=3) => #4
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              return TimeSpan.FromSeconds(input[20][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 21_1"(MemberName="DueTime Delay 21_1", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[20][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 21_1"(MemberName="DueTime Sustain 21_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 21_1(PropertyMappings(PropertyMapping(name="DueTime Delay 21_1", selector=Source2), PropertyMapping(name="DueTime Sustain 21_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=36) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_21_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 21_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=41))
        -> NestedWorkflow => #2
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[20][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 21_2"(MemberName=Pin, Value=5) => #4
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[20][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 21_2"(MemberName="DueTime Sustain 21_2", Value=PT2S) => #7
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[20][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 21_2"(MemberName="DueTime Delay 21_2", Value=PT1S) => #6
        #2, #6, #7 -> NestedWorkflow 21_2(PropertyMappings(PropertyMapping(name="DueTime Delay 21_2", selector=Source2), PropertyMapping(name="DueTime Sustain 21_2", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=36) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_21_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 22_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=42))
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              return input[21][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 22_1"(MemberName=Pin, Value=16) => #4
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              return TimeSpan.FromSeconds(input[21][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 22_1"(MemberName="DueTime Delay 22_1", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[21][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 22_1"(MemberName="DueTime Sustain 22_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 22_1(PropertyMappings(PropertyMapping(name="DueTime Delay 22_1", selector=Source2), PropertyMapping(name="DueTime Sustain 22_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=40) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_22_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 22_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=43))
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              return input[21][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 22_2"(MemberName=Pin, Value=14) => #4
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              return TimeSpan.FromSeconds(input[21][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 22_2"(MemberName="DueTime Delay 22_2", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[21][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 22_2"(MemberName="DueTime Sustain 22_2", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 22_2(PropertyMappings(PropertyMapping(name="DueTime Delay 22_2", selector=Source2), PropertyMapping(name="DueTime Sustain 22_2", selector=Source3))) => #1
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        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_22_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 23_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=44))
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              return input[22][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 23_1"(MemberName=Pin, Value=20) => #4
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              return TimeSpan.FromSeconds(input[22][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 23_1"(MemberName="DueTime Delay 23_1", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[22][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 23_1"(MemberName="DueTime Sustain 23_1", Value=PT2S) => #7
        #2, #6, #7 -> NestedWorkflow 23_1(PropertyMappings(PropertyMapping(name="DueTime Delay 23_1", selector=Source2), PropertyMapping(name="DueTime Sustain 23_1", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM4, Pin=44) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_23_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #27 -> NestedWorkflow 23_2
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#0 -> NestedWorkflow 3
    WorkflowInput Source1 => #13
    NestedWorkflow Timer => #20
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    -> Timestamp
    -> Bonsai.IO.CsvWriter(FileName="New folder\Timer3.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="Source.Value,Source.Timestamp")
    Source(Generator=IntProperty(Value=0)) => #22
    #22, #20 -> CombineLatest
    -> Bonsai.Scripting.PythonTransform => #19
      Script:
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    #13, #19 -> NestedWorkflow 28_2
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    #13, #19 -> NestedWorkflow 29_1
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    #13, #19 -> NestedWorkflow 29_2
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    #13, #19 -> NestedWorkflow 25_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=48))
        -> NestedWorkflow => #9
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        WorkflowInput Source2 => #12
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[24][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 25_1"(MemberName=Pin, Value=11) => #0
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[24][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 25_1"(MemberName="DueTime Delay 25_1", Value=PT1S) => #5
        #12 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[24][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 25_1"(MemberName="DueTime Sustain 25_1", Value=PT2S) => #3
        #9, #5, #3 -> NestedWorkflow 25_1(PropertyMappings(PropertyMapping(name="DueTime Delay 25_1", selector=Source2), PropertyMapping(name="DueTime Sustain 25_1", selector=Source3))) => #8
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 25_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 25_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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        #8, #0 -> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=11) => #7
        -> WorkflowOutput
        #7 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_25_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #19 -> NestedWorkflow 25_2
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    #13, #19 -> NestedWorkflow 30_1
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    #13, #19 -> NestedWorkflow 30_2
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    #13, #19 -> NestedWorkflow 26_1
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    #13, #19 -> NestedWorkflow 26_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=51))
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              return input[25][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 26_2"(MemberName=Pin, Value=9) => #10
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              return TimeSpan.FromSeconds(input[25][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 26_2"(MemberName="DueTime Delay 26_2", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[25][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 26_2"(MemberName="DueTime Sustain 26_2", Value=PT2S) => #5
        #2, #6, #5 -> NestedWorkflow 26_2(PropertyMappings(PropertyMapping(name="DueTime Delay 26_2", selector=Source2), PropertyMapping(name="DueTime Sustain 26_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 26_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 26_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM6, Pin=7) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_26_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #19 -> NestedWorkflow 27_1
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    #13, #19 -> NestedWorkflow 27_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=53))
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              return input[26][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 27_2"(MemberName=Pin, Value=5) => #4
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              return TimeSpan.FromSeconds(input[26][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 27_2"(MemberName="DueTime Sustain 27_2", Value=PT1S) => #6
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              return TimeSpan.FromSeconds(input[26][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 27_2"(MemberName="DueTime Delay 27_2", Value=PT2S) => #7
        #2, #7, #6 -> NestedWorkflow 27_2(PropertyMappings(PropertyMapping(name="DueTime Delay 27_2", selector=Source2), PropertyMapping(name="DueTime Sustain 27_2", selector=Source3))) => #1
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        #1, #4 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM6, Pin=3) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_27_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #19 -> NestedWorkflow 28_1
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    #13, #19 -> NestedWorkflow 31_1
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=60))
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              return input[30][0]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 31_1"(MemberName=Pin, Value=11) => #0
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              return TimeSpan.FromSeconds(input[30][2])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 31_1"(MemberName="DueTime Delay 31_1", Value=PT1S) => #3
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              return TimeSpan.FromSeconds(input[30][4])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 31_1"(MemberName="DueTime Sustain 31_1", Value=PT2S) => #5
        #9, #3, #5 -> NestedWorkflow 31_1(PropertyMappings(PropertyMapping(name="DueTime Delay 31_1", selector=Source2), PropertyMapping(name="DueTime Sustain 31_1", selector=Source3))) => #8
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 31_1"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 31_1"(MemberName=DueTime, Value=PT0.5S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT0.5S)
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        #8, #0 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM6, Pin=28) => #7
        -> WorkflowOutput
        #7 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_31_01_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)
    #13, #19 -> NestedWorkflow 31_2
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    #13, #19 -> NestedWorkflow 32_1
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    #13, #19 -> NestedWorkflow 32_2
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=63))
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              return input[31][1]
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        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 32_2"(MemberName=Pin, Value=9) => #10
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              return TimeSpan.FromSeconds(input[31][3])
        -> ExternalizedTimeSpanOfDelay "DueTime Delay 32_2"(MemberName="DueTime Delay 32_2", Value=PT1S) => #5
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              return TimeSpan.FromSeconds(input[31][5])
        -> ExternalizedTimeSpanOfDelay "DueTime Sustain 32_2"(MemberName="DueTime Sustain 32_2", Value=PT2S) => #6
        #2, #5, #6 -> NestedWorkflow 32_2(PropertyMappings(PropertyMapping(name="DueTime Delay 32_2", selector=Source2), PropertyMapping(name="DueTime Sustain 32_2", selector=Source3))) => #1
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            ExternalizedTimeSpanOfDelay "DueTime Sustain 32_2"(MemberName=DueTime, Value=PT2S) => #20
            ExternalizedTimeSpanOfDelay "DueTime Delay 32_2"(MemberName=DueTime, Value=PT10S) => #21
            #11, #21 -> Delay(PropertyMappings(PropertyMapping(name=DueTime, selector=Source2)), DueTime=PT10S)
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        #1, #10 -> Bonsai.Arduino.DigitalOutput(PropertyMappings(PropertyMapping(name=Pin, selector=Source2)), PortName=COM6, Pin=32) => #0
        -> WorkflowOutput
        #0 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName="New folder\DigitalOutputTimeStamp_32_02_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=Source)

Source(Generator=BooleanProperty(Value=false))
-> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=50)

Source(Generator=BooleanProperty(Value=false))
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=50)

Source(Generator=BooleanProperty(Value=false))
-> Bonsai.Arduino.DigitalOutput(PortName=COM6, Pin=50)
