WorkflowBuilder(Version=2.4.0-preview)
Bonsai.FlyPad.FlyPadHotSwap(LocationId=22) => #0
-> NestedWorkflow 1
    WorkflowInput Source1 => #0
    IntProperty(Value=0)
    -> Bonsai.Scripting.PythonTransform => #2
      Script:
        import clr

        def getOutputType():
          return clr.GetClrType(list)

        def process(input):
          with open(r'config/experiment.dat') as f:
            f=[x.strip() for x in f if x.strip()]
            data=[tuple(map(float,x.split())) for x in f[0:]]
            length = len(data)
          return data
    #0, #2 -> NestedWorkflow 1_1
        WorkflowInput Source2 => #0
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[0][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input

                if (colour == 1):
            	return 11
                elif (colour == 2):
            	return 13
                elif (colour == 3):
                   return 12
                elif (colour == 4):
                   return 10
                else:
                   return 50
        -> PropertyMapping(Pin) => #3
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][2])
        -> PropertyMapping(DueTime) => #5
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][4])
        -> PropertyMapping(DueTime) => #7
        BooleanProperty(Value=false)
        -> First => #9
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=0))
        -> NestedWorkflow
            WorkflowInput Source1
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Abs
            -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1")
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> GreaterThan(Operand=DoubleProperty(Value=120))
            -> WorkflowOutput
        -> BitwiseNot
        -> DistinctUntilChanged => #14
        #14, #5 -> Throttle(DueTime=PT0S)
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #7 -> CreateObservable CreateStimulationTrial
            WorkflowInput Source1
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.2S)
            -> BooleanProperty(Value=false) => #5
            #2, #5 -> Merge
            -> WorkflowOutput
        -> Switch => #18
        #9, #18 -> Concat => #19
        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=11) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_01_01_.csv"
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=it
          CompatibilityMode=true
        #20 -> WorkflowOutput
    #0, #2 -> NestedWorkflow 1_2
        WorkflowInput Source2 => #0
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[0][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> PropertyMapping(Pin) => #3
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][3])
        -> PropertyMapping(DueTime) => #5
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[0][5])
        -> PropertyMapping(DueTime) => #7
        BooleanProperty(Value=false)
        -> First => #9
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=1))
        -> NestedWorkflow
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        -> BitwiseNot
        -> DistinctUntilChanged => #14
        #14, #5 -> Throttle(DueTime=PT0S)
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #7 -> CreateObservable CreateStimulationTrial
            WorkflowInput Source1
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.2S)
            -> BooleanProperty(Value=false) => #5
            #2, #5 -> Merge
            -> WorkflowOutput
        -> Switch => #18
        #9, #18 -> Concat => #19
        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=11) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_01_02_.csv"
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=it
          CompatibilityMode=true
        #20 -> WorkflowOutput
    #0, #2 -> NestedWorkflow 2_1
        WorkflowInput Source2 => #0
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[1][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 7
                elif (colour == 2):
            	return 9
                elif (colour == 3):
                   return 8
                elif (colour == 4):
                   return 6
                else:
                   return 50
        -> PropertyMapping(Pin) => #3
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][2])
        -> PropertyMapping(DueTime) => #5
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][4])
        -> PropertyMapping(DueTime) => #7
        BooleanProperty(Value=false)
        -> First => #9
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=2))
        -> NestedWorkflow
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        -> BitwiseNot
        -> DistinctUntilChanged => #14
        #14, #5 -> Throttle(DueTime=PT0S)
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #7 -> CreateObservable CreateStimulationTrial
            WorkflowInput Source1
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.2S)
            -> BooleanProperty(Value=false) => #5
            #2, #5 -> Merge
            -> WorkflowOutput
        -> Switch => #18
        #9, #18 -> Concat => #19
        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=7) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_02_01_.csv"
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=it
          CompatibilityMode=true
        #20 -> WorkflowOutput
    #0, #2 -> NestedWorkflow 2_2
        WorkflowInput Source2 => #0
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[1][1]
        -> Bonsai.Scripting.PythonTransform
          Script:
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        -> PropertyMapping(Pin) => #3
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][3])
        -> PropertyMapping(DueTime) => #5
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[1][5])
        -> PropertyMapping(DueTime) => #7
        BooleanProperty(Value=false)
        -> First => #9
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=3))
        -> NestedWorkflow
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        -> BitwiseNot
        -> DistinctUntilChanged => #14
        #14, #5 -> Throttle(DueTime=PT0S)
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #7 -> CreateObservable CreateStimulationTrial
            WorkflowInput Source1
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.2S)
            -> BooleanProperty(Value=false) => #5
            #2, #5 -> Merge
            -> WorkflowOutput
        -> Switch => #18
        #9, #18 -> Concat => #19
        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=7) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_02_02_.csv"
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=it
          CompatibilityMode=true
        #20 -> WorkflowOutput
    #0, #2 -> NestedWorkflow 3_1
        WorkflowInput Source2 => #0
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(float)
            def process(input):
              return input[2][0]
        -> Bonsai.Scripting.PythonTransform
          Script:
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            	return 3
                elif (colour == 2):
            	return 5
                elif (colour == 3):
                   return 4
                elif (colour == 4):
                   return 2
                else:
                   return 50
        -> PropertyMapping(Pin) => #3
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2][2])
        -> PropertyMapping(DueTime) => #5
        #0 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2][4])
        -> PropertyMapping(DueTime) => #7
        BooleanProperty(Value=false)
        -> First => #9
        WorkflowInput Source1
        -> Bonsai.Dsp.SelectChannels(Channels(int=4))
        -> NestedWorkflow
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        -> BitwiseNot
        -> DistinctUntilChanged => #14
        #14, #5 -> Throttle(DueTime=PT0S)
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #7 -> CreateObservable CreateStimulationTrial
            WorkflowInput Source1
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.2S)
            -> BooleanProperty(Value=false) => #5
            #2, #5 -> Merge
            -> WorkflowOutput
        -> Switch => #18
        #9, #18 -> Concat => #19
        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=3) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_03_01_.csv"
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=it
          CompatibilityMode=true
        #20 -> WorkflowOutput
    #0, #2 -> NestedWorkflow 3_2
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              return input[2][1]
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              return TimeSpan.FromSeconds(input[2][3])
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              return TimeSpan.FromSeconds(input[2][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=5))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=3) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_03_02_.csv"
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    #0, #2 -> NestedWorkflow 4_1
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              return input[3][0]
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            	return 16
                elif (colour == 2):
            	return 14
                elif (colour == 3):
                   return 15
                elif (colour == 4):
                   return 17
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              return TimeSpan.FromSeconds(input[3][2])
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              return TimeSpan.FromSeconds(input[3][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=6))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=16) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_04_01_.csv"
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    #0, #2 -> NestedWorkflow 4_2
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              return input[3][1]
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              return TimeSpan.FromSeconds(input[3][3])
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              return TimeSpan.FromSeconds(input[3][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=7))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=16) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_04_02_.csv"
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    #0, #2 -> NestedWorkflow 5_1
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              return input[4][0]
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            	return 20
                elif (colour == 2):
            	return 18
                elif (colour == 3):
                   return 19
                elif (colour == 4):
                   return 21
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              return TimeSpan.FromSeconds(input[4][2])
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              return TimeSpan.FromSeconds(input[4][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=8))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=20) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_05_01_.csv"
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    #0, #2 -> NestedWorkflow 5_2
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              return input[4][1]
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              return TimeSpan.FromSeconds(input[4][3])
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              return TimeSpan.FromSeconds(input[4][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=9))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=20) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_05_02_.csv"
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    #0, #2 -> NestedWorkflow 6_1
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              return input[5][0]
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            	return 24
                elif (colour == 2):
            	return 22
                elif (colour == 3):
                   return 23
                elif (colour == 4):
                   return 25
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              return TimeSpan.FromSeconds(input[5][2])
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              return TimeSpan.FromSeconds(input[5][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=10))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=24) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_06_01_.csv"
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    #0, #2 -> NestedWorkflow 6_2
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              return input[5][1]
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              return TimeSpan.FromSeconds(input[5][3])
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              return TimeSpan.FromSeconds(input[5][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=11))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=24) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_06_02_.csv"
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    #0, #2 -> NestedWorkflow 7_1
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              return input[6][0]
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            	return 28
                elif (colour == 2):
            	return 26
                elif (colour == 3):
                   return 27
                elif (colour == 4):
                   return 29
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              return TimeSpan.FromSeconds(input[6][2])
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              return TimeSpan.FromSeconds(input[6][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=12))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=28) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_07_01_.csv"
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    #0, #2 -> NestedWorkflow 7_2
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              return input[6][1]
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              return TimeSpan.FromSeconds(input[6][3])
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              return TimeSpan.FromSeconds(input[6][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=13))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=28) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_07_02_.csv"
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    #0, #2 -> NestedWorkflow 8_1
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              return input[7][0]
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            	return 32
                elif (colour == 2):
            	return 30
                elif (colour == 3):
                   return 31
                elif (colour == 4):
                   return 33
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              return TimeSpan.FromSeconds(input[7][2])
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              return TimeSpan.FromSeconds(input[7][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=14))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=32) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_08_01_.csv"
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    #0, #2 -> NestedWorkflow 8_2
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              return input[7][1]
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              return TimeSpan.FromSeconds(input[7][3])
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              return TimeSpan.FromSeconds(input[7][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=15))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=32) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_08_02_.csv"
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    #0, #2 -> NestedWorkflow 9_1
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              return input[8][0]
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              return TimeSpan.FromSeconds(input[8][2])
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              return TimeSpan.FromSeconds(input[8][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=16))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=36) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_09_01_.csv"
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    #0, #2 -> NestedWorkflow 9_2
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              return input[8][1]
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              return TimeSpan.FromSeconds(input[8][3])
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              return TimeSpan.FromSeconds(input[8][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=17))
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          FileName="New folder\DigitalOutputTimeStamp_09_02_.csv"
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    #0, #2 -> NestedWorkflow 10_1
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              return input[9][0]
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              return TimeSpan.FromSeconds(input[9][2])
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              return TimeSpan.FromSeconds(input[9][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=18))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=40) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_10_01_.csv"
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    #0, #2 -> NestedWorkflow 10_2
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              return input[9][1]
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              return TimeSpan.FromSeconds(input[9][3])
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              return TimeSpan.FromSeconds(input[9][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=19))
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          FileName="New folder\DigitalOutputTimeStamp_10_02_.csv"
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    #0, #2 -> NestedWorkflow 11_1
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              return input[10][0]
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              return TimeSpan.FromSeconds(input[10][2])
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              return TimeSpan.FromSeconds(input[10][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=20))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=44) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_11_01_.csv"
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    #0, #2 -> NestedWorkflow 11_2
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              return input[10][1]
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              return TimeSpan.FromSeconds(input[10][3])
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              return TimeSpan.FromSeconds(input[10][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=21))
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          FileName="New folder\DigitalOutputTimeStamp_11_02_.csv"
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    #0, #2 -> NestedWorkflow 12_1
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              return input[11][0]
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              return TimeSpan.FromSeconds(input[11][2])
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              return TimeSpan.FromSeconds(input[11][4])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=22))
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        #19, #3 -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=48) => #20
        -> Timestamp
        -> Bonsai.IO.CsvWriter
          FileName="New folder\DigitalOutputTimeStamp_12_01_.csv"
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    #0, #2 -> NestedWorkflow 12_2
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              return input[11][1]
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              return TimeSpan.FromSeconds(input[11][3])
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              return TimeSpan.FromSeconds(input[11][5])
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        -> Bonsai.Dsp.SelectChannels(Channels(int=23))
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          FileName="New folder\DigitalOutputTimeStamp_12_02_.csv"
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
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=50)
#0 -> NestedWorkflow 2
    WorkflowInput Source1 => #0
    IntProperty(Value=0)
    -> Bonsai.Scripting.PythonTransform => #2
      Script:
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    #0, #2 -> NestedWorkflow 13_1
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    #0, #2 -> NestedWorkflow 13_2
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    #0, #2 -> NestedWorkflow 14_1
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    #0, #2 -> NestedWorkflow 14_2
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    #0, #2 -> NestedWorkflow 15_1
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    #0, #2 -> NestedWorkflow 15_2
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    #0, #2 -> NestedWorkflow 16_1
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    #0, #2 -> NestedWorkflow 16_2
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    #0, #2 -> NestedWorkflow 17_1
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    #0, #2 -> NestedWorkflow 17_2
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    #0, #2 -> NestedWorkflow 18_1
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    #0, #2 -> NestedWorkflow 18_2
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    #0, #2 -> NestedWorkflow 19_1
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    #0, #2 -> NestedWorkflow 19_2
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    #0, #2 -> NestedWorkflow 20_1
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    #0, #2 -> NestedWorkflow 20_2
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    #0, #2 -> NestedWorkflow 21_1
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    #0, #2 -> NestedWorkflow 21_2
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    #0, #2 -> NestedWorkflow 22_1
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    #0, #2 -> NestedWorkflow 22_2
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    #0, #2 -> NestedWorkflow 23_1
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    #0, #2 -> NestedWorkflow 23_2
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    #0, #2 -> NestedWorkflow 24_1
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    #0, #2 -> NestedWorkflow 24_2
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
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=50)
#0 -> Disable NestedWorkflow 3
    WorkflowInput Source1 => #0
    IntProperty(Value=0)
    -> Bonsai.Scripting.PythonTransform => #2
      Script:
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    #0, #2 -> NestedWorkflow 25_1
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    #0, #2 -> NestedWorkflow 25_2
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    #0, #2 -> NestedWorkflow 26_1
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    #0, #2 -> NestedWorkflow 26_2
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    #0, #2 -> NestedWorkflow 27_1
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    #0, #2 -> NestedWorkflow 27_2
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    #0, #2 -> NestedWorkflow 28_1
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    #0, #2 -> NestedWorkflow 28_2
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    #0, #2 -> NestedWorkflow 29_1
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    #0, #2 -> NestedWorkflow 29_2
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    #0, #2 -> NestedWorkflow 30_1
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    #0, #2 -> NestedWorkflow 30_2
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    #0, #2 -> NestedWorkflow 31_1
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    #0, #2 -> NestedWorkflow 31_2
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    #0, #2 -> NestedWorkflow 32_1
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    #0, #2 -> NestedWorkflow 32_2
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
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=50)
#0 -> Disable Bonsai.Dsp.MatrixWriter(Suffix=None, Overwrite=false, Layout=RowMajor)
