WorkflowBuilder(Version=2.2.1)
BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=50)

StringProperty(Value=COM4)
-> NestedWorkflow 1 => #5
    IntProperty(Value=5) => #0
    IntProperty(Value=0) => #4
    IntProperty(Value=7) => #5
    IntProperty(Value=4) => #6
    IntProperty(Value=6) => #10
    IntProperty(Value=1) => #18
    IntProperty(Value=3) => #20
    IntProperty(Value=2) => #22
    WorkflowInput Source1 => #25
    #0, #25 -> NestedWorkflow Arena => #1
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=24)
        -> Timestamp
        -> WorkflowOutput
    #0, #1 -> Zip => #2
    #4, #25 -> NestedWorkflow Arena => #3
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=11)
        -> Timestamp
        -> WorkflowOutput
    #4, #3 -> Zip => #19
    #6, #25 -> NestedWorkflow Arena => #7
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=20)
        -> Timestamp
        -> WorkflowOutput
    #6, #7 -> Zip => #13
    #5, #25 -> NestedWorkflow Arena => #8
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=12)
        -> Timestamp
        -> WorkflowOutput
    #5, #8 -> Zip => #9
    #10, #25 -> NestedWorkflow Arena => #11
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=28)
        -> Timestamp
        -> WorkflowOutput
    #10, #11 -> Zip => #12
    #22, #25 -> NestedWorkflow Arena => #14
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=1)
        -> Timestamp
        -> WorkflowOutput
    #22, #14 -> Zip => #24
    #18, #25 -> NestedWorkflow Arena => #15
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=7)
        -> Timestamp
        -> WorkflowOutput
    #18, #15 -> Zip => #23
    #20, #25 -> NestedWorkflow Arena => #17
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=16)
        -> Timestamp
        -> WorkflowOutput
    #20, #17 -> Zip => #26
    IntProperty(Value=8) => #29
    #29, #25 -> NestedWorkflow Arena => #28
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=16)
        -> Timestamp
        -> WorkflowOutput
    #29, #28 -> Zip => #27
    IntProperty(Value=9) => #32
    #32, #25 -> NestedWorkflow Arena => #31
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=40)
        -> Timestamp
        -> WorkflowOutput
    #32, #31 -> Zip => #30
    IntProperty(Value=10) => #35
    #35, #25 -> NestedWorkflow Arena => #34
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=44)
        -> Timestamp
        -> WorkflowOutput
    #35, #34 -> Zip => #33
    IntProperty(Value=11) => #38
    #38, #25 -> NestedWorkflow Arena => #37
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform => #11
          Script:
            import clr

            def getOutputType():
              return clr.GetClrType(tuple)

            def process(input):
              with open(r'config/experiment_openloop.dat') as f:
                f=[x.strip() for x in f if x.strip()]
                data=[tuple(map(float,x.split())) for x in f[0:]]
                length = len(data)
              return data[input]
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr

            def getOutputType():
                return clr.GetClrType(int)

            def process(input):
                colour = input[1]
                if input[0] > 12:
                  fact = -1
                else:
                  fact = 1
                ch = input[0]
                if (colour == 1):
                  return ch
                elif (colour == 2):
                  return ch + 2*fact
                elif (colour == 3):
                  return ch + fact
                elif (colour == 4):
                  return ch - fact
                else:
                  return 50
        -> ExternalizedPropertyOfInt32DigitalOutput "Pin 1_1"(MemberName=Pin, Value=11) => #0
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[3])
        -> ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT1S) => #8
        #11 -> Bonsai.Scripting.PythonTransform
          Script:
            from System import TimeSpan

            @returns(TimeSpan)
            def process(input):
              return TimeSpan.FromSeconds(input[2])
        -> ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT4S) => #4
        #4, #8 -> NestedWorkflow "Open-Loop Stim" => #3
            ExternalizedTimeSpanOfTimer Period(MemberName=Period, Value=PT3S)
            -> Timer(DueTime=PT0S, Period=PT3S) => #3
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #2
            ExternalizedTimeSpanOfDelay DueTime(MemberName=DueTime, Value=PT2S) => #8
            #3, #8 -> Delay(DueTime=PT2S)
            -> BitwiseNot
            -> GreaterThan(Operand=WorkflowPropertyOfInt64(Value=0)) => #6
            #2, #6 -> Merge
            -> WorkflowOutput
        WorkflowInput Source2
        -> ExternalizedPropertyOfStringExternalizedPropertyOfStringDigitalOutput Name(MemberName=Name, Value=PortName)
        -> ExternalizedPropertyOfStringDigitalOutput COM4(MemberName=PortName, Value=COM4) => #9
        #0, #3, #9 -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=48)
        -> Timestamp
        -> WorkflowOutput
    #38, #37 -> Zip => #36
    #19, #23, #24, #26, #13, #2, #12, #9, #27, #30, #33, #36 -> Merge
    -> Bonsai.IO.CsvWriter
      FileName="New folder\DigitalOutputTimeStamp_01.csv"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
      Selector="Source.Item1,Source.Item2"
Bonsai.FlyPad.FlyPadSource(LocationId=22) => #11
-> Bonsai.Dsp.MatrixWriter(Path=F:\kathrin\optopad\20170703\CapacitanceData_C03_01_22_C01_23_44_C02_45_64, Suffix=Timestamp, Overwrite=false, Layout=RowMajor) => #0
#11 -> Timestamp
-> Bonsai.IO.CsvWriter => #2
  FileName=F:\kathrin\optopad\20170703\CapacitanceTimeStamp.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector=Source.Timestamp
Timer(DueTime=PT1H, Period=PT0S) => #13
#0, #13 -> TakeUntil
#2, #13 -> TakeUntil
#5, #13 -> TakeUntil

BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM5, Pin=50)

BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=50)
